OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  --:: Remember to change the file
  to the one you recorded before!
Comment
  Overview

  This scenario trains the Common Spatial Pattern spatial filter
  that will be used in the further steps.

  The EEG signal is filtered in a large frequency band [8-30 Hz].

  Then the Stimulation based epoching boxes
  provide examples for the CSP Spatial Filter Trainer :
  class 1: LEFT trials
  class 2: RIGHT trials

  At the end of the training process,
  the CSP trainer outputs the stimulation
  OVTK_StimulationId_TrainCompleted on success,
  telling the Player Controller to pause the scenario.

Generic stream reader => #0
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery/pipo_test/train_hand9_date09_05
#0.Output stream 2 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
-> Channel Selector "EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8"
  Channel List = EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference
-> Channel Selector "EEG2;EEG3;EEG4" => #4
  Channel List = EEG2;EEG3;EEG4
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#4, Input stream 2=#0.Output stream 3 -> Identity => #5
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching "Left trials" => #6
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching "Right trials" => #7
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Stimulations=#5.Output stream 2, Signal condition 1=#6, Signal condition 2=#7 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/CSP_train/CSP_Allinput_4dimen/date9_05/hand9_input3_chan_2
  Filter dimension = 2
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
