OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Yann Renad / Fabien Lotte
0x9f5c4075 = File Replay
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used to replay online sessions.
  The scenario displays the classification confusion matrix,
  along with the global performance evolving during the sessions.

  With this scenario, you can watch the performance of the classifier
  during time, and for each class.
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  The Classifier Processor classifies
   everytime it receives a new feature vector.

  If we want an accurate performance computation,
  we need to classify only when the participant
  is actually doing the task, i.e.
  when an instruction (left or right) is received.
  This is achieved by the switch above.
Comment
  The Confusion Matrix computation needs
  the instruction flow, and the classification flow
  to compare them, for each class.

  As the instructions (OVTK_StimulationId_Left and _Right)
  are included in the stimulation stream, we need to filter
  away the other information in it with Stimulation Filter.

  Same goes for the Classifier Accuracy Measure that
  computes the global performance of the classifier.
Comment
  Finally, the feature vectors are classified with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
-> Channel Selector "EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8"
  Channel List = EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference
-> Channel Selector "EEG2;EEG3;EEG4" => #4
  Channel List = EEG2;EEG3;EEG4
  Action = Select
  Channel Matching Method = Smart
-> CSP Spatial Filter
  Spatial Filter Coefficients = 2.703847e-001 -2.033485e-001 2.403200e-001 2.356385e-001 3.924334e-001 2.392066e-001 1.127002e-001 5.732516e-001 3.104992e-001 2.895371e-001 1.986914e-001 -2.802680e-001 8.642486e-002 -2.668905e-001 -2.873133e-001 -3.079680e-001 -2.311904e-001 -3.049968e-001 -3.204301e-001 -4.425807e-001 -2.982545e-001 -3.624581e-001 -1.744479e-002 -7.034878e-001 -5.995533e-003 -1.229489e-001 1.247895e-001 2.070440e-002 6.842287e-002 -2.541404e-001 -2.561868e-001 -3.879915e-001 4.338307e-001 1.443247e-001 3.069893e-001 3.027873e-001 3.956776e-001 2.813833e-001 2.775941e-001 3.539172e-001 2.829927e-001 3.027860e-001 3.108204e-001 2.946543e-001 8.225412e-001 2.972170e-001 1.898263e-001 2.250992e-001 1.687568e-001 -1.534859e-001 -2.300909e-001 4.962294e-002 1.434820e-001 1.137746e-001 8.609021e-002 2.163431e-001 2.683773e-001 3.076638e-001 3.600542e-001 3.077418e-001 2.519831e-001 2.256527e-001 3.292362e-001 2.892913e-001 3.994603e-001 3.099987e-001
  Number of Output Channels = 6
  Number of Input Channels = 11
  Filter matrix file =
  0x8d21ff41 = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/CSP_train/CSP_Allinput_4dimen/date9_05/hand9_input3_chan_2
-> Time based epoching => #6
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
-> Signal Power Log
-> Feature aggregator => #8
Features=#8 -> Classifier processor => #9
  Filename to load configuration from = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/class_train/csp-train-date-9_05/csp-class-train_hand9_Overfit.cfg
#9.Probability values -> Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog
#9.Probability values -> Matrix Transpose
-> Channel Selector "1;2" => #12
  Channel List = 1;2
  Action = Select
  Channel Matching Method = Smart
-> 0x341d3912 left_right_label => #13
  Clock frequency (Hz) = 64
  Script = C:/openvibe-3.4.0-64bit/share/openvibe/scenarios/box-tutorials/python3/scripts/model_label.py
  Stimulation1 = OVTK_GDF_Foot
  Stimulation2 = OVTK_GDF_Left
  Stimulation3 = OVTK_GDF_Right
Data=#12, Stimulations=#13 -> Signal display "Beta power"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 2
  Vertical Offset = 0
  Time Scale = 20
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
Data=#6 -> Signal display "Epoch Display"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#4 -> Temporal filter "8_11_Filter"
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 11
-> Simple DSP
  Equation = x*x
-> Epoch average => #18
  Averaging type = Moving epoch average
  Epoch count = 16
Input Signal=#18, Input Stimulations=#13 -> 0x341d3912 Generic stream writer
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/ERD_ERS_Analyze/ERD_Test
  Use compression = false
Data=#18, Stimulations=#13 -> 0x341d3912 ERD_Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#4 -> Temporal filter "26_30_Filter"
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 26
  High Cut-off Frequency (Hz) = 30
-> Simple DSP
  Equation = x*x
-> Epoch average => #23
  Averaging type = Moving epoch average
  Epoch count = 16
Data=#23, Stimulations=#13 -> 0x341d3912 ERS_Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input Signal=#23, Input Stimulations=#13 -> 0x341d3912 Generic stream writer
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/ERD_ERS_Analyze/ERS_Test
  Use compression = false
Data=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
0x341d3912 Graz Motor Imagery BCI Stimulator => #27
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.25
  Feedback Duration (in sec) = 3.75
  End of Trial Minimum Duration (in sec) = 1.5
  End of Trial Maximum Duration (in sec) = 3.5
Stimulations=#27, Amplitude=#9.Hyperplane distance -> 0x341d3912 Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
#27 -> Stimulation Filter => #29
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Left
  Action to perform(1) = Select
  Stimulation range begin(1) = OVTK_GDF_Right
  Stimulation range end(1) = OVTK_GDF_Right
Targets=#29, Classification results=#9.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
-> 0x341d3912 Matrix Display "Confusion Matrix"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Targets=#29, LDA=#9.Labels -> 0x341d3912 Accuracy Measure

Generic stream reader
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/Test/test_hand9

0x341d3912 Generic stream writer
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/Test/test_hand9
  Use compression = false
