OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Yann Renad / Fabien Lotte
0x9f5c4075 = File Replay
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used to replay online sessions.
  The scenario displays the classification confusion matrix,
  along with the global performance evolving during the sessions.

  With this scenario, you can watch the performance of the classifier
  during time, and for each class.
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  The Classifier Processor classifies
   everytime it receives a new feature vector.

  If we want an accurate performance computation,
  we need to classify only when the participant
  is actually doing the task, i.e.
  when an instruction (left or right) is received.
  This is achieved by the switch above.
Comment
  The Confusion Matrix computation needs
  the instruction flow, and the classification flow
  to compare them, for each class.

  As the instructions (OVTK_StimulationId_Left and _Right)
  are included in the stimulation stream, we need to filter
  away the other information in it with Stimulation Filter.

  Same goes for the Classifier Accuracy Measure that
  computes the global performance of the classifier.
Comment
  Finally, the feature vectors are classified with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
-> Channel Selector "EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8"
  Channel List = EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference => #3
-> Channel Selector "EEG2;EEG3;EEG4"
  Channel List = EEG2;EEG3;EEG4
  Action = Select
  Channel Matching Method = Smart
-> CSP Spatial Filter
  Spatial Filter Coefficients = 2.703847e-001 -2.033485e-001 2.403200e-001 2.356385e-001 3.924334e-001 2.392066e-001 1.127002e-001 5.732516e-001 3.104992e-001 2.895371e-001 1.986914e-001 -2.802680e-001 8.642486e-002 -2.668905e-001 -2.873133e-001 -3.079680e-001 -2.311904e-001 -3.049968e-001 -3.204301e-001 -4.425807e-001 -2.982545e-001 -3.624581e-001 -1.744479e-002 -7.034878e-001 -5.995533e-003 -1.229489e-001 1.247895e-001 2.070440e-002 6.842287e-002 -2.541404e-001 -2.561868e-001 -3.879915e-001 4.338307e-001 1.443247e-001 3.069893e-001 3.027873e-001 3.956776e-001 2.813833e-001 2.775941e-001 3.539172e-001 2.829927e-001 3.027860e-001 3.108204e-001 2.946543e-001 8.225412e-001 2.972170e-001 1.898263e-001 2.250992e-001 1.687568e-001 -1.534859e-001 -2.300909e-001 4.962294e-002 1.434820e-001 1.137746e-001 8.609021e-002 2.163431e-001 2.683773e-001 3.076638e-001 3.600542e-001 3.077418e-001 2.519831e-001 2.256527e-001 3.292362e-001 2.892913e-001 3.994603e-001 3.099987e-001
  Number of Output Channels = 6
  Number of Input Channels = 11
  Filter matrix file =
  0x8d21ff41 = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/CSP_train/CSP_Allinput_4dimen/for3_class/hand1_LR.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.064
-> Signal Power Log
-> Feature aggregator => #8
Features=#8 -> Classifier processor => #9
  Filename to load configuration from = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/class_train/csp-class-train_hand1_LRB.cfg
#3 -> Channel Selector "EEG1;EEG3;EEG5"
  Channel List = EEG1;EEG3;EEG5
  Action = Select
  Channel Matching Method = Smart
-> CSP Spatial Filter
  Spatial Filter Coefficients = 2.703847e-001 -2.033485e-001 2.403200e-001 2.356385e-001 3.924334e-001 2.392066e-001 1.127002e-001 5.732516e-001 3.104992e-001 2.895371e-001 1.986914e-001 -2.802680e-001 8.642486e-002 -2.668905e-001 -2.873133e-001 -3.079680e-001 -2.311904e-001 -3.049968e-001 -3.204301e-001 -4.425807e-001 -2.982545e-001 -3.624581e-001 -1.744479e-002 -7.034878e-001 -5.995533e-003 -1.229489e-001 1.247895e-001 2.070440e-002 6.842287e-002 -2.541404e-001 -2.561868e-001 -3.879915e-001 4.338307e-001 1.443247e-001 3.069893e-001 3.027873e-001 3.956776e-001 2.813833e-001 2.775941e-001 3.539172e-001 2.829927e-001 3.027860e-001 3.108204e-001 2.946543e-001 8.225412e-001 2.972170e-001 1.898263e-001 2.250992e-001 1.687568e-001 -1.534859e-001 -2.300909e-001 4.962294e-002 1.434820e-001 1.137746e-001 8.609021e-002 2.163431e-001 2.683773e-001 3.076638e-001 3.600542e-001 3.077418e-001 2.519831e-001 2.256527e-001 3.292362e-001 2.892913e-001 3.994603e-001 3.099987e-001
  Number of Output Channels = 6
  Number of Input Channels = 11
  Filter matrix file =
  0x8d21ff41 = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/CSP_train/CSP_Allinput_4dimen/for3_class/hand1_FD.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.064
-> Signal Power Log
-> Feature aggregator => #14
Features=#14 -> Classifier processor => #15
  Filename to load configuration from = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/class_train/csp-class-train_hand1_FB.cfg
#15.Probability values -> Matrix Transpose
-> Channel Selector "1"
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> keyboard
  Clock frequency (Hz) = 64
  Script = C:/openvibe-3.4.0-64bit/share/openvibe/scenarios/box-tutorials/python3/scripts/keyboard.py
  Stimulation1 = OVTK_GDF_Foot
  Stimulation2 = OVTK_GDF_Left
  Stimulation3 = OVTK_GDF_Right
Input 1=#9.Probability values, Input 2=#15.Probability values -> Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog

Generic stream reader
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/Test/test_hand9
