OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The Graz Visualization box will send the timeline
  markers directly to Acquisition Server using the
  TCP Tagging plugin. The server will then attach them
  appropriately to the EEG stream.
Comment
  Overview

  This scenario can be used as a first
  step to collect some training data. This
  data will later be used to train a classifier
  for online use.

  When you start this scenario, just wait 30
  seconds before it starts the instruction sequence.

  You will then be presented left / right arrows to
  let you imagine left / right hand movements.
  There will be 20 arrows of each side.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  Note: It is always a good idea to
  monitor the signals during an experiment

Sinus oscillator => #0
  Channel count = 1
  Sampling frequency = 250
  Generated epoch sample count = 2
Graz Motor Imagery BCI Stimulator => #1
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 10
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.25
  Feedback Duration (in sec) = 3.75
  End of Trial Minimum Duration (in sec) = 1.5
  End of Trial Maximum Duration (in sec) = 3.5
  num_of_class = 4.000000
  Third Class = OVTK_GDF_Up
  ForthClass = OVTK_GDF_Tongue
Data=#0, Stimulations=#1 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Stimulations=#1 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
#1 -> Send_to_unity => #5
  Clock frequency (Hz) = 1
  Script = C:/openvibe-3.4.0-64bit/share/openvibe/scenarios/box-tutorials/python3/scripts/train_stimulus.py
Sinus oscillator => #6
  Channel count = 1
  Sampling frequency = 250
  Generated epoch sample count = 2
Input 1=#6, Input 2=#5 -> Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog

Generic stream reader
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery/pipo_test/3_class/train_hand9

0x341d3912 Acquisition client => #9
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#9.Signal stream -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
-> Channel Selector "EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8"
  Channel List = EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference => #12
Data=#12 -> Signal display "re_ref"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#9.Signal stream, Stimulations=#9.Stimulations -> Signal display "raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream 1=#9.Experiment information, Input stream 2=#9.Signal stream, Input stream 3=#9.Stimulations -> 0x341d3912 Generic stream writer
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery/jedi/train_hand2
  Use compression = false

0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
