OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  The Classifier Trainer box produces a
  configuration file at the end of the experiment
  which will be used during online sessions.

  The box raised the stimulation
  OVTK_StimulationId_TrainCompleted
  at the end of the training process. This stimulation is
  used to stop the scenario with a Player Controller.

Generic stream reader => #0
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery/pipo_test/train_hand4_2
#0.Output stream 2 -> Channel Selector "EEG2;EEG4"
  Channel List = EEG2;EEG4
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #2
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
#0.Output stream 3 -> Identity
-> Identity => #4
Input stream 1=#2, Input stream 2=#4 -> Identity => #5
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Signal Power Log
-> Feature aggregator => #8
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Signal Power Log
-> Feature aggregator => #11
Stimulations=#5.Output stream 2, Features for class 1=#8, Features for class 2=#11 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery/normal_mi_train/classifier_hand_4_try.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 7
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
Temporal filter "8_11_Filter" => #14
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 11
Data=#14 -> Signal display "ERD_Signal filter"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#14 -> Simple DSP => #16
  Equation = x*x
-> Epoch average => #17
  Averaging type = Moving epoch average
  Epoch count = 16
Data=#17, Stimulations=#5.Output stream 2 -> Signal display "ERD_Signal avg"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input Signal=#17, Input Stimulations=#5.Output stream 2 -> 0x341d3912 Generic stream writer
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/ERD_ERS_Analyze/ERD_Train
  Use compression = false
Data=#16 -> Signal display "ERD_Signal squaring"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Temporal filter "26_30_Filter" => #21
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 26
  High Cut-off Frequency (Hz) = 30
-> Simple DSP => #22
  Equation = x*x
-> Epoch average => #23
  Averaging type = Moving epoch average
  Epoch count = 16
Data=#23, Stimulations=#5.Output stream 2 -> Signal display "ERS_Signal avg"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input Signal=#23, Input Stimulations=#5.Output stream 2 -> 0x341d3912 Generic stream writer
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/ERD_ERS_Analyze/ERS_Train
  Use compression = false
Data=#22 -> Signal display "ERS_Signal squaring"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#21 -> Signal display "ERS_Signal filter"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

0x341d3912 Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =

Signal display "ERD_Signal avg"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

0x341d3912 Signal display "Signal right"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

0x341d3912 Signal display "Signal left"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
