OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used online once the
  classifiers is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The preprocessing of this scenario consists
  in re-referencing all the channels to the
  channel 2 (which was located on the nose) and
  to select the 10 channels over the motor cortex
  of the hands. The Spatial Filter box computes
  a surface laplacian filter and reduces the output
  to two channels: one on the left and one on the right.

  note: depending on your acquisition device,
  you may have to tune this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Then comes the feature extraction part.

  The signal is filtered in the alpha/beta [8 24] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visulization
  box for feedback !

  In order to display correct feedback,
  the Graz Visulization box expects a negative
  value for one class and a positive value for the other
  class.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Identity => #1
#1.Output stream 2 -> Channel Selector "EEG2;EEG4"
  Channel List = EEG2;EEG4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = 4;0;0;4
  Number of Output Channels = 2
  Number of Input Channels = 2
  Filter matrix file =
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 24
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Signal Power Log
-> Feature aggregator => #7
Features=#7 -> Classifier processor => #8
  Filename to load configuration from = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
#8.Hyperplane distance -> Simple DSP => #9
  Equation = x
#1.Output stream 2 -> Channel Selector "EEG3"
  Channel List = EEG3
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 16
  High Cut-off Frequency (Hz) = 24
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Crop
  Crop method = Min/Max
  Min crop value = 5.033257
  Max crop value = 320.740842
-> Simple DSP => #17
  Equation = x-12.38705
Input 1=#8.Probability values, Input 2=#17 -> Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog
#17 -> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = C:/openvibe-3.4.0-64bit/share/openvibe/scenarios/box-tutorials/python3/scripts/keyboard.py
Data=#17 -> Signal display "Beta power"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 30
  Vertical Offset = 0
  Time Scale = 20
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
#17 -> 0x341d3912 Matrix Display "Beta Power as color"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Graz Motor Imagery BCI Stimulator => #22
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.25
  Feedback Duration (in sec) = 3.75
  End of Trial Minimum Duration (in sec) = 1.5
  End of Trial Maximum Duration (in sec) = 3.5
Stimulations=#22, Amplitude=#9 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
