OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  The Classifier Trainer box produces a
  configuration file at the end of the experiment
  which will be used during online sessions.

  The box raised the stimulation
  OVTK_StimulationId_TrainCompleted
  at the end of the training process. This stimulation is
  used to stop the scenario with a Player Controller.

Generic stream reader => #0
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery/jedi/train_hand2
#0.Output stream 2 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
-> Channel Selector "EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8"
  Channel List = EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference
-> Channel Selector "EEG2;EEG3;EEG4;EEG5" => #4
  Channel List = EEG2;EEG3;EEG4;EEG5
  Action = Select
  Channel Matching Method = Smart
#0.Output stream 3 -> Identity
-> Identity => #6
Data=#4, Stimulations=#6 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream 1=#4, Input stream 2=#6 -> Identity => #8
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Signal Power Log
-> Feature aggregator => #11
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Signal Power Log
-> Feature aggregator => #14
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Tongue
-> Signal Power Log
-> Feature aggregator => #17
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Up
-> Signal Power Log
-> Feature aggregator => #20
Stimulations=#8.Output stream 2, Features for class 1=#11, Features for class 2=#14, Features for class 3=#20, Features for class 4=#17 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery/jedi/test2.cfg
  Multiclass strategy to apply = OneVsOne
  Pairwise Decision Strategy = Voting
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Class 3 label = OVTK_GDF_Up
  Class 4 label = OVTK_GDF_Tongue
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 7
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop

0x341d3912 Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =

CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 1.442817e-001 3.411863e-003 -1.213417e-001 -3.119889e-001 1.115873e-001 1.359580e-001 -1.116613e-001 -3.135968e-001 -1.250939e-001 -1.378700e-002 -2.625042e-001 -1.009421e-001 -2.279613e-001 6.689580e-001 -3.348420e-002 9.899176e-002 -4.863345e-002 4.481541e-001 -2.025669e-001 -9.318723e-002 5.258966e-002 2.090623e-004 -1.451749e-001 -3.856019e-001 -4.710458e-002 9.675494e-002 1.549741e-001 -7.944412e-002 -7.903602e-002 7.455923e-001 -3.815222e-001 2.166322e-001 7.102007e-002 -1.493399e-001 -5.719637e-002 -1.732339e-002 4.253947e-002 -1.286825e-001 -1.415511e-001 1.086118e-001 3.485295e-002 -2.764141e-001 8.364691e-001 -3.726375e-001 4.963272e-002 9.167431e-003 -1.381837e-002 -1.012741e-002 -1.700471e-002 -1.616294e-001 6.193112e-002 -2.344197e-002 -3.390554e-001 2.998192e-001 1.635785e-002 3.717487e-001 -8.495080e-002 8.709944e-002 -4.562827e-001 4.325673e-001 -3.228420e-001 7.993942e-003 -1.115950e-001 -1.922763e-001 2.762776e-001 2.720282e-002 1.158864e-001 -4.858494e-002 -3.275103e-001 2.691000e-001 8.273217e-002 1.568368e-001 6.632540e-002 -6.147631e-002 -4.658877e-001 5.034320e-001 -1.359116e-001 5.664146e-002 -2.065083e-001 3.221159e-001 -2.724882e-001 7.822386e-002 -2.063637e-001 1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/CSP_train/CSP_Allinput_4dimen/for3_class/csp-class-train_hand11_CSPin5out2_reref.cfg
