OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
Comment
  This scenario is an example of
  how to convert files between formats.

  Conversion may not work correctly for all
  possible input and output combinations.

  You may have to customize the scenario
  to your particular case.

  If you run this scenario manually from Designer,
  please configure the input and output filenames
  of the reader and writer boxes.

  Script 'openvibe-convert' relies on this scenario.

Generic stream reader => #0
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery/pipo_test/train_1
#0.Output stream 2 -> 0x341d3912 Timeout
  Timeout delay = 1
  Output Stimulation = OVTK_StimulationId_Label_00
-> 0x341d3912 Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
Data=#0.Output stream 2 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Experiment information=#0.Output stream 1, Signal=#0.Output stream 2, Stimulation=#0.Output stream 3 -> 0x341d3912 GDF file writer
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/Convert_data/train2_gdf

Generic stream reader => #5
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery/pipo_test/train_hand9_date09_05
#5.Output stream 2 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
-> Channel Selector "EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8"
  Channel List = EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference
-> Channel Rename => #9
  New channel names = Fz;C3;Cz;C4;Pz;PO7;Oz;PO8
-> Timeout
  Timeout delay = 1
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
Experiment information=#5.Output stream 1, Signal=#9, Stimulations=#5.Output stream 3 -> EDF File Writer
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/Convert_data/hand9_edf

0x341d3912 Channel Rename
  New channel names = Fz;C3;Cz;C4;Pz;PO7;Oz;PO8

GDF file reader => #14
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/Convert_data/train1_right_gdf
  Samples per buffer = 16
Input signal=#14.EEG stream, Input stimulations=#14.Stimulations -> Stimulation based epoching "Left trials" => #15
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Signal=#15 -> 0x341d3912 GDF file writer
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/Convert_data/train1_left_gdf
Data=#15 -> 0x341d3912 Signal display "left_display"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#14.EEG stream, Input stimulations=#14.Stimulations -> Stimulation based epoching "Right trials" => #18
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Data=#18 -> 0x341d3912 Signal display "right_display"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#18 -> 0x341d3912 GDF file writer
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/Convert_data/train1_right_gdf
Data=#14.EEG stream, Stimulations=#14.Stimulations -> 0x341d3912 Signal display "ALL"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
