OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)

Generic stream reader => #0
  Filename = C:/git/Senior_Thesis/DataSet/Convert_data/hand_9
#0.Output Signal -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 6
  High Cut-off Frequency (Hz) = 32
-> Common Average Reference => #2
Input stream 1=#2, Input stream 2=#0.Output Stimulations -> Identity => #3
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Left
-> Signal Power Log
-> Feature aggregator => #6
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Right
-> Signal Power Log
-> Feature aggregator => #9
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Up trials"
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Up
-> Signal Power Log
-> Feature aggregator
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Non-imagine trials"
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Tongue
-> Signal Power Log
-> Feature aggregator => #15
Stimulations=#3.Output stream 2, Features for class 1=#6, Features for class 2=#9, Features for class 3=#15 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/git/Senior_Thesis/OpenViBE_Box/Trained_model/hand9_NRL_Native.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Class 3 label = OVTK_GDF_Tongue
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 7
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
Data=#2, Stimulations=#0.Output Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
