OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.

  Then the Stimulation Based Epoching box
  is used to select four seconds of signal half a second
  after the instruction was shown to the user
  (OVTK_GDF_Left and OVTK_GDF_Right).

  The signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  The Classifier Trainer box produces a
  configuration file at the end of the experiment
  which will be used during online sessions.

  When the training is completed the box
  outputs a stimulation OVTK_StimulationId_TrainCompleted
  to stop the scenario through a Player Controller

Generic stream reader => #0
  Filename = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery/pipo_test/3_class/train_hand1
#0.Output stream 2 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
-> Channel Selector "EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8"
  Channel List = EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference => #3
Input stream 1=#3, Input stream 2=#0.Output stream 3 -> Identity => #4
#4.Output stream 1 -> Channel Selector "EEG1;EEG3;EEG5" => #5
  Channel List = EEG1;EEG3;EEG5
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#5, Input stream 2=#4.Output stream 2 -> Identity => #6
#6.Output stream 1 -> CSP Spatial Filter => #7
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 1.442817e-001 3.411863e-003 -1.213417e-001 -3.119889e-001 1.115873e-001 1.359580e-001 -1.116613e-001 -3.135968e-001 -1.250939e-001 -1.378700e-002 -2.625042e-001 -1.009421e-001 -2.279613e-001 6.689580e-001 -3.348420e-002 9.899176e-002 -4.863345e-002 4.481541e-001 -2.025669e-001 -9.318723e-002 5.258966e-002 2.090623e-004 -1.451749e-001 -3.856019e-001 -4.710458e-002 9.675494e-002 1.549741e-001 -7.944412e-002 -7.903602e-002 7.455923e-001 -3.815222e-001 2.166322e-001 7.102007e-002 -1.493399e-001 -5.719637e-002 -1.732339e-002 4.253947e-002 -1.286825e-001 -1.415511e-001 1.086118e-001 3.485295e-002 -2.764141e-001 8.364691e-001 -3.726375e-001 4.963272e-002 9.167431e-003 -1.381837e-002 -1.012741e-002 -1.700471e-002 -1.616294e-001 6.193112e-002 -2.344197e-002 -3.390554e-001 2.998192e-001 1.635785e-002 3.717487e-001 -8.495080e-002 8.709944e-002 -4.562827e-001 4.325673e-001 -3.228420e-001 7.993942e-003 -1.115950e-001 -1.922763e-001 2.762776e-001 2.720282e-002 1.158864e-001 -4.858494e-002 -3.275103e-001 2.691000e-001 8.273217e-002 1.568368e-001 6.632540e-002 -6.147631e-002 -4.658877e-001 5.034320e-001 -1.359116e-001 5.664146e-002 -2.065083e-001 3.221159e-001 -2.724882e-001 7.822386e-002 -2.063637e-001 1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/CSP_train/CSP_Allinput_4dimen/for3_class/hand1_FD.cfg
Input signal=#7, Input stimulations=#6.Output stream 2 -> Stimulation based epoching "Up trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Up
-> Signal Power Log
-> Feature aggregator => #10
Input signal=#7, Input stimulations=#6.Output stream 2 -> Stimulation based epoching "Blank trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Tongue
-> Signal Power Log
-> Feature aggregator => #13
Stimulations=#6.Output stream 2, Features for class 1=#10, Features for class 2=#13 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/class_train/csp-class-train_hand1_FB.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Up
  Class 2 label = OVTK_GDF_Tongue
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 7
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#4.Output stream 1 -> Channel Selector "EEG2;EEG3;EEG4"
  Channel List = EEG2;EEG3;EEG4
  Action = Select
  Channel Matching Method = Smart
-> CSP Spatial Filter => #17
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 1.442817e-001 3.411863e-003 -1.213417e-001 -3.119889e-001 1.115873e-001 1.359580e-001 -1.116613e-001 -3.135968e-001 -1.250939e-001 -1.378700e-002 -2.625042e-001 -1.009421e-001 -2.279613e-001 6.689580e-001 -3.348420e-002 9.899176e-002 -4.863345e-002 4.481541e-001 -2.025669e-001 -9.318723e-002 5.258966e-002 2.090623e-004 -1.451749e-001 -3.856019e-001 -4.710458e-002 9.675494e-002 1.549741e-001 -7.944412e-002 -7.903602e-002 7.455923e-001 -3.815222e-001 2.166322e-001 7.102007e-002 -1.493399e-001 -5.719637e-002 -1.732339e-002 4.253947e-002 -1.286825e-001 -1.415511e-001 1.086118e-001 3.485295e-002 -2.764141e-001 8.364691e-001 -3.726375e-001 4.963272e-002 9.167431e-003 -1.381837e-002 -1.012741e-002 -1.700471e-002 -1.616294e-001 6.193112e-002 -2.344197e-002 -3.390554e-001 2.998192e-001 1.635785e-002 3.717487e-001 -8.495080e-002 8.709944e-002 -4.562827e-001 4.325673e-001 -3.228420e-001 7.993942e-003 -1.115950e-001 -1.922763e-001 2.762776e-001 2.720282e-002 1.158864e-001 -4.858494e-002 -3.275103e-001 2.691000e-001 8.273217e-002 1.568368e-001 6.632540e-002 -6.147631e-002 -4.658877e-001 5.034320e-001 -1.359116e-001 5.664146e-002 -2.065083e-001 3.221159e-001 -2.724882e-001 7.822386e-002 -2.063637e-001 1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/CSP_train/CSP_Allinput_4dimen/for3_class/hand1_LR.cfg
Input signal=#17, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Signal Power Log
-> Feature aggregator => #20
Input signal=#17, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Signal Power Log
-> Feature aggregator => #23
Stimulations=#4.Output stream 2, Features for class 1=#20, Features for class 2=#23 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery-CSP/class_train/csp-class-train_hand1_LRB.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 7
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
Stimulations=#0.Output stream 3 -> Signal display "ALL_signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
