OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)

Generic stream reader => #0
  Filename = C:/git/Senior_Thesis/DataSet/Convert_data/hand9
#0.Output Signal -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 6
  High Cut-off Frequency (Hz) = 32
-> Common Average Reference
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.1
-> Signal Power Log
-> Feature aggregator => #5
#0.Output Stimulations -> Stimulation Filter => #6
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Left
  Action to perform(1) = Select
  Stimulation range begin(1) = OVTK_GDF_Right
  Stimulation range end(1) = OVTK_GDF_Right
  Action to perform(2) = Select
  Stimulation range begin(2) = OVTK_GDF_Tongue
  Stimulation range end(2) = OVTK_GDF_Tongue
Features=#5, Commands=#6 -> Classifier processor => #7
  Filename to load configuration from = C:/git/Senior_Thesis/OpenViBE_Box/Trained_model/hand9_NRL_OVO.cfg
#7.Probability values -> Matrix Transpose
-> Channel Selector "1;2;3"
  Channel List = 1;2;3
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename => #10
  New channel names = Left;Right;None
Data=#10, Stimulations=#6 -> Signal display "Classification"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 2
  Vertical Offset = 0
  Time Scale = 20
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
Stimulations=#0.Output Stimulations, Amplitude=#7.Hyperplane distance -> 0x341d3912 Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = true
  Predictions to integrate = 5
  Positive feedback only = false
Targets=#6, Classification results=#7.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
  Class 3 = OVTK_GDF_Tongue
-> Matrix Display "Confusion Matrix"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Targets=#6, LDA=#7.Labels -> Accuracy Measure

0x341d3912 Graz Motor Imagery BCI Stimulator
  Lua Script = C:/git/Senior_Thesis/OpenViBE_Box/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 30
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20.000000
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.5
  Feedback Duration (in sec) = 2.5
  End of Trial Minimum Duration (in sec) = 1.5
  End of Trial Maximum Duration (in sec) = 3.0
  num_of_class = 4.000000
  Third Class = OVTK_GDF_Up
  ForthClass = OVTK_GDF_Tongue
