OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Yann Renad / Fabien Lotte
0x9f5c4075 = File Replay
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario allows to quickly replay
  an online session recorded file. The
  main difference between this scenario and
  scenario 3-online is basically
  all the acquisition / stimulation part
  being replaced by a file reader.

  Note: refer to scenario 3-online for
  details about the processing.

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 3 -> Identity
-> Identity => #2
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 24
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Signal Power Log => #8
-> Feature aggregator => #9
Features=#9 -> Classifier processor => #10
  Filename to load configuration from = C:/Users/pipo_/AppData/Roaming/OpenVIBE-3.4.0/scenarios/bci-examples/motor-imagery/motor-imagery-bci-config-classifier.cfg
#10.Probability values -> Simple DSP => #11
  Equation = x
-> Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog
Stimulations=#2, Amplitude=#11 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
Data=#8 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#0.Output stream 2, Stimulations=#0.Output stream 3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
